PsychoPy2experiment version="2022.1.0rc10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
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Routines
  Routine Blank
  Routine fixed_interval
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine instructions
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
