PsychoPy2experiment version="2022.1.0rc1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
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Routines
  Routine image_rating
    ImageComponent stimulus
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent attractiveness
      forceEndRoutine = True
      granularity = 0.1
      labels = "Not attractive", "Neutral", "Attractive"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine images_2AFC
    PolygonComponent fixation_2AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    StaticComponent ISI_load_images
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_2AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine image_multiple_ratings
    ImageComponent stimulus_2
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent valence
      forceEndRoutine = True
      labels = "Sad", "Neutral", "Happy"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent arousal
      forceEndRoutine = True
      labels = "Not Arousing", "Neutral", "Highly Arousing"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent positivity
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine images_4AFC
    PolygonComponent fixation_4AFC
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent top_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    StaticComponent ISI_load_images_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent top_right_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (0.3, 0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_left_img
      image [set during: Images_2AFC.ISI_load_images] = default.png
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent bott_right_img
      image = default.png
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_4AFC
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine feedback_accuracy_key_resp
    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the keypress was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not recieve feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine feedback_accuracy_mouse_resp
    CodeComponent fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Check if a mouse click was correct or not.
        # This routine will need to follow another routine with a
        # mouse component in it called "mouse" and several clickable components
        # you will also need a column in your conditions file indicating the name
        # of the correct component to click.
        # If your experiment is missing these you will see an error message.

        # If a mouse component has been added (with a correct answer column) and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no mouse component found or no corrClick column- look at the Std out window for info'
        fb_col = 'black'

        try:
            if mouse.clicked_name[-1] == corrClick:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n 2. In the mouse component in the "data" tab select store data "on click".\n 3. In the conditions file have a column called "corrClicked" (where corrClicked is the name of the component to be clicked')
    TextComponent fb2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_text
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  Routine feedback_rt_key_resp
    CodeComponent rt_fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a key response
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"

        # If your experiment is missing that you will
        # not recieve feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no key_resp component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(key_resp.rt*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    TextComponent rt_fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine feedback_rt_mouse
    CodeComponent rt_fb_code2
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a kmouse/touch response
        # This routine will need to follow another routine with a
        # mouse response component in it called "mouse"

        # If your experiment is missing that you will
        # not recieve feedback and an error message will be displayed.

        # If a mouse component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no mouse component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(mouse.time[-1]*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a mouse component in it called "mouse"\n2. that data is set to store "on click"')
    TextComponent rt_fb2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine fixed_interval
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
    TextComponent fix_rand
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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Flow
  Routine random_interval
