PsychoPy2experiment version="2022.1.0rc1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = bart2
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This is a game where you have to optimise your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press;
            SPACE to pump the balloon
            RETURN to bank the cash for this balloon and move onto the next
    KeyboardComponent resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    KeyboardComponent bankButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.05
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    ImageComponent balloonBody
      anchor = center-left
      image = redBalloon.png
      pos = [-1, 0]
      size [set every frame] = 0.1+nPumps*0.015
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent reminderMsg
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.2, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to pump the balloon
        Press RETURN to bank this sum
    TextboxComponent balloonValMsg
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"This balloon value:\n£{round(thisBalloonEarnings, 2)}"
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    TextboxComponent bankedMsg
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.2, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $f"You have banked:\n£{round(bankedEarnings, 2)}"
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    CodeComponent checkKeys
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      End Routine:
        #save data
        trials.addData('nPumps', nPumps)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
  Routine feedback
    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("bang.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Oops! Lost that one!"
          bang.play()
        else:
          feedbackText=u"You banked £%.2f" %lastBalloonEarnings
    TextboxComponent feedbackMsg
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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  Routine final_score
    TextboxComponent finalScore
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Well done! You banked a total of\n£{round(bankedEarnings, 2)}"
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'imageFile': 'blueBalloon.png', 'maxPumps': 2},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 8},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 14},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 20},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 26},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 32},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 38},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 44},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 50},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 56},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 62},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 68},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 74},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 80},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 86},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 92},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 98},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 104},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 110},
      {'imageFile': 'blueBalloon.png', 'maxPumps': 116}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine final_score
