PsychoPy2experiment version="2021.1.4"
Settings
  Audio latency priority = 4
  Audio lib = pygame
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = BFI
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Routines
  Routine demographics
    TextboxComponent demogInstr
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please answer the following questions:
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    FormComponent demog
      Data Format = rows
      Item Padding = 0.06
      Items = demographics.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ButtonComponent contBtn1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (.35, -.45)
      size = (0.25, 0.08)
      startVal [time (s)] = 0.0
      text = Continue
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  Routine TIPI
    TextboxComponent formInstructs
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.025
      pos = (0, 0.5)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Here are a number of characteristics that may or may not apply to you. For example, do you agree that you are someone who likes to spend time with others? Please select the appropriate rating next to each statement to indicate the extent to which you agree or disagree with that statement.
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    FormComponent TIPIForm
      Data Format = rows
      Item Padding = 0.05
      Items = TIPI.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ButtonComponent contBtn2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (.35, -.45)
      size = (0.25, 0.08)
      startVal [time (s)] = 0.1
      text = End
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Flow
  Routine demographics
  Routine TIPI
