PsychoPy2experiment version="2025.2.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = drag_and_drop
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.4)
      size = (0.8, 0.2)
      startVal [time (s)] = 0.0
      text = Click and drag to move the white and pink squares on the left onto the grid in the centre so that it matches the grid on the right. Press ACCEPT when you're done.
      units = height
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    ImageComponent grid
      image = stimuli/blank_grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent pinkSquare
      draggable = True
      fillColor = pink
      lineColor = grey
      lineWidth = 8
      pos [set every repeat] = (-0.5, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent whiteSquare
      draggable = True
      fillColor = white
      lineColor = grey
      lineWidth = 8
      pos [set every repeat] = (-0.5, 0.1)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent target
      image [set every repeat] = $targetImg
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      units = height
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    ButtonComponent acceptBtn
      bold = True
      fillColor = mediumseagreen
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Accept
      units = height
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      callback:
        # store time taken
        timeTaken = t
    CodeComponent onlineChanges
      Code Type = JS
      Begin JS Experiment:
        // create a Mouse to listen for drags
        mouse = new core.Mouse({"win": psychoJS.window});
      Each JS Frame:
        // drag each square if clicked on this frame
        if (mouse.isPressedIn(whiteSquare)) {
            whiteSquare.setPos(mouse.getPos());
        }
        if (mouse.isPressedIn(pinkSquare)) {
            pinkSquare.setPos(mouse.getPos());
        }
    CodeComponent calculateCorrect
      Code Type = Both
      End JS Routine:
        // make sure correct answers were read as floats
        targetPos = {
            white: whiteSquarePos.map(parseFloat),
            pink: pinkSquarePos.map(parseFloat)
        }
        // do same as in Python, but with targetPos.___ rather than ___SquarePos
        whiteSquareCorr = ((((targetPos.white[0] - 0.1) < whiteSquare.pos[0]) && (whiteSquare.pos[0] < (targetPos.white[0] + 0.1))) && (((targetPos.white[1] - 0.1) < whiteSquare.pos[1]) && (whiteSquare.pos[1] < (targetPos.white[1] + 0.1))));
        pinkSquareCorr = ((((targetPos.pink[0] - 0.1) < pinkSquare.pos[0]) && (pinkSquare.pos[0] < (targetPos.pink[0] + 0.1))) && (((targetPos.pink[1] - 0.1) < pinkSquare.pos[1]) && (pinkSquare.pos[1] < (targetPos.pink[1] + 0.1))));
        corr = (whiteSquareCorr && pinkSquareCorr);
        psychoJS.experiment.addData("whiteSquare.pos", whiteSquare.pos);
        psychoJS.experiment.addData("pinkSquare.pos", pinkSquare.pos);
        psychoJS.experiment.addData("whiteSquare.corr", whiteSquareCorr);
        psychoJS.experiment.addData("pinkSquare.corr", pinkSquareCorr);
      End Routine:
        # each square is correct if it's within 0.1 units of target position
        whiteSquareCorr = (
            whiteSquarePos[0] - 0.1 < whiteSquare.pos[0] < whiteSquarePos[0] + 0.1
            and whiteSquarePos[1] - 0.1 < whiteSquare.pos[1] < whiteSquarePos[1] + 0.1
        )
        pinkSquareCorr = (
            pinkSquarePos[0] - 0.1 < pinkSquare.pos[0] < pinkSquarePos[0] + 0.1
            and pinkSquarePos[1] - 0.1 < pinkSquare.pos[1] < pinkSquarePos[1] + 0.1
        )
        # trial is correct if both squares are correct
        corr = whiteSquareCorr and pinkSquareCorr
        # save positions and correct
        thisExp.addData("whiteSquare.pos", whiteSquare.pos)
        thisExp.addData("pinkSquare.pos", pinkSquare.pos)
        thisExp.addData("whiteSquare.corr", whiteSquareCorr)
        thisExp.addData("pinkSquare.corr", pinkSquareCorr)
  Routine feedback_corr
    RoutineSettingsComponent feedback_corr
      skipIf = not corr
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    TextboxComponent fbCorr
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $f"Correct! Your time taken to complete the grid was {timeTaken:.2f}s"
      units = height
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  Routine feedback_incorr
    RoutineSettingsComponent feedback_incorr
      skipIf = corr
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    TextboxComponent fbIncorr
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Incorrect! The grid should look like this:
      units = height
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    ImageComponent fbTarget
      image [set every repeat] = $targetImg
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/solutions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'whiteSquarePos': [0.2, -0.2], 'pinkSquarePos': [-0.2, 0.2], 'targetImg': 'stimuli/solution_1.png'},
      {'whiteSquarePos': [0, -0.2], 'pinkSquarePos': [-0.2, 0], 'targetImg': 'stimuli/solution_2.png'},
      {'whiteSquarePos': [0.2, 0.2], 'pinkSquarePos': [-0.2, 0], 'targetImg': 'stimuli/solution_3.png'},
      {'whiteSquarePos': [0, -0.2], 'pinkSquarePos': [0.2, -0.2], 'targetImg': 'stimuli/solution_4.png'},
      {'whiteSquarePos': [0, -0.2], 'pinkSquarePos': [0, 0.2], 'targetImg': 'stimuli/solution_5.png'},
      {'whiteSquarePos': [-0.2, -0.2], 'pinkSquarePos': [-0.2, 0], 'targetImg': 'stimuli/solution_6.png'},
      {'whiteSquarePos': [0.2, -0.2], 'pinkSquarePos': [0.2, 0.2], 'targetImg': 'stimuli/solution_7.png'},
      {'whiteSquarePos': [-0.2, 0.2], 'pinkSquarePos': [0, 0], 'targetImg': 'stimuli/solution_8.png'},
      {'whiteSquarePos': [0, -0.2], 'pinkSquarePos': [-0.2, 0], 'targetImg': 'stimuli/solution_9.png'},
      {'whiteSquarePos': [0.2, 0], 'pinkSquarePos': [-0.2, 0], 'targetImg': 'stimuli/solution_10.png'}]
    Routine trial
    Routine feedback_corr
    Routine feedback_incorr
  LoopTerminator trials
