PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1040, 800]
  color = $[1, 1, 1]
  expName = MentalRotation
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Intructions_1
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    KeyboardComponent instr_key_1
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent instr_textbox1
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Welcome. You will see two letters on the screen that have been rotated. For each pair of letters, indicate if they are mirror images of each other when they two letters are in their normal upright position. (Ignore the rotations.)

        Press 'm' if they are mirror images of each other.
        Press 'n' if they are not the same (not mirror images).

        Press 'm' to start
  Routine Intructions_2
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    ImageComponent image_L_3
      image [set every repeat] = FR.png
      ori [set every repeat] = 0
      pos = [-.25, .2]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    ImageComponent image_R_3
      image [set every repeat] = F.png
      ori [set every repeat] = -90
      pos = [0.25, .2]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_2
      allowedKeys = 'n'
      correctAns = $same
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instrtxt2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Here, the letter on the right is a mirror image of the letter on the left. They would still be different after mentally rotating them to line up. So press 'n' (different). If they are the same, you would press 'm'.

        Try to respond as accurately as you can. Also try to be fast, but emphasize being accurate. Press 'n' to start.
  Routine the_end
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    TextComponent end_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $'The end. You scored ' + str(correct_counter) + ' correct'
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine licence
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    TextComponent licence_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        AUTHORS: Jeremy R. Gray & Nathaniel R. Pasmanter
        CONTACT: jrgray@gmail.com

        COPYRIGHT (c) 2013 MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES
        ALL RIGHTS RESERVED

        PERMISSION IS GRANTED TO USE, COPY, CREATE DERIVATIVE WORKS AND REDISTRIBUTE
        THIS SOFTWARE AND SUCH DERIVATIVE WORKS FOR ANY PURPOSE, SO LONG AS NO FEE IS
        CHARGED, AND SO LONG AS THE AUTHORSHIP AND COPYRIGHT NOTICE ABOVE, THIS GRANT
        OF PERMISSION, AND THE DISCLAIMER BELOW APPEAR IN ALL COPIES MADE; AND SO LONG
        AS THE NAME OF MICHIGAN STATE UNIVERSITY IS NOT USED IN ANY ADVERTISING OR
        PUBLICITY PERTAINING TO THE USE OR DISTRIBUTION OF THIS SOFTWARE WITHOUT
        SPECIFIC, WRITTEN PRIOR AUTHORIZATION.

        THIS SOFTWARE IS PROVIDED AS IS, WITHOUT REPRESENTATION FROM MICHIGAN STATE
        UNIVERSITY AS TO ITS FITNESS FOR ANY PURPOSE, AND WITHOUT WARRANTY BY MICHIGAN
        STATE UNIVERSITY OF ANY KIND, EITHER EXPRESS OR IMPLIED, INCLUDING WITHOUT
        LIMITATION THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A
        PARTICULAR PURPOSE. THE MICHIGAN STATE UNIVERSITY BOARD OF TRUSTEES SHALL NOT
        BE LIABLE FOR ANY DAMAGES, INCLUDING SPECIAL, INDIRECT, INCIDENTAL, OR
        CONSEQUENTIAL DAMAGES, WITH RESPECT TO ANY CLAIM ARISING OUT OF OR IN
        CONNECTION WITH THE USE OF THE SOFTWARE, EVEN IF IT HAS BEEN OR IS HEREAFTER
        ADVISED OF THE POSSIBILITY OF SUCH DAMAGES.
  Routine trial
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    ImageComponent image_L
      image [set every repeat] = $left_im
      ori [set every repeat] = leftori
      pos = [-.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    ImageComponent image_R
      image [set every repeat] = $right_im
      ori [set every repeat] = rightori
      pos = [0.25, 0]
      size = [.3,.3]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'n','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent main_instr
      color = black
      letterHeight = 0.03
      pos = [0, -.3]
      startVal [time (s)] = 0.0
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      text:
        'n' for "non mirrored"/"different"
        'm' for "mirrored"/"same"
    TextComponent trial_count
      color = black
      letterHeight = 0.03
      pos = [.4, -.4]
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN) + '/' + str(trials.nTotal)
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if key_resp.corr:
            fb = 'Correct!'
            fbcol = 'green'
        else:
            fb = 'Incorrect'
            fbcol = 'red'

        correct_counter += 1
    TextComponent fbtext
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb
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Flow
  Routine Intructions_1
  Routine Intructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = MentalRot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('left_im', 'F.png'), ('right_im', 'FR.png'), ('leftori', 0), ('rightori', 0), ('same', 'n'), ('corrAns', 'n'), ('angle', 0)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'F.png'), ('leftori', 0), ('rightori', 0), ('same', 'y'), ('corrAns', 'm'), ('angle', 0)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'FR.png'), ('leftori', 0), ('rightori', 45), ('same', 'n'), ('corrAns', 'n'), ('angle', 45)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'F.png'), ('leftori', 0), ('rightori', 45), ('same', 'y'), ('corrAns', 'm'), ('angle', 45)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'FR.png'), ('leftori', 0), ('rightori', 90), ('same', 'n'), ('corrAns', 'n'), ('angle', 90)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'F.png'), ('leftori', 0), ('rightori', 90), ('same', 'y'), ('corrAns', 'm'), ('angle', 90)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'FR.png'), ('leftori', 0), ('rightori', 135), ('same', 'n'), ('corrAns', 'n'), ('angle', 135)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'F.png'), ('leftori', 0), ('rightori', 135), ('same', 'y'), ('corrAns', 'm'), ('angle', 135)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'FR.png'), ('leftori', 0), ('rightori', 180), ('same', 'n'), ('corrAns', 'n'), ('angle', 180)]),
      OrderedDict([('left_im', 'F.png'), ('right_im', 'F.png'), ('leftori', 0), ('rightori', 180), ('same', 'y'), ('corrAns', 'm'), ('angle', 180)])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
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine the_end
