PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = grey
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextboxComponent word
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $text
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    MicrophoneComponent micResp
      channels = mono
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = Voice (16kHz)
      speakTimes = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      transcribe = True
      transcribeBackend = Google Cloud
      transcribeLang = en-us
      transcribeWords = 'red:100', 'green:100', 'blue:100'
      trimSilent = False
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  Routine instruct
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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      text:
        This demo shows how to collect verbal responses from participants using a verbal version of the Stroop task.

        All you have to do is speak the colour of the ink (while ignoring the word the letters spell).

        Press any key to continue.
  Routine thanks
    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine audioFeedback
    TextboxComponent feedbackTxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $("The correct answer was: "+str(letterColor)+"\nYou said: "+str(micResp.lastScript))
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'corrAns': 'red', 'congruent': 1},
      {'text': 'red', 'letterColor': 'green', 'corrAns': 'green', 'congruent': 0},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'green', 'congruent': 1},
      {'text': 'green', 'letterColor': 'blue', 'corrAns': 'blue', 'congruent': 0},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'blue', 'congruent': 1},
      {'text': 'blue', 'letterColor': 'red', 'corrAns': 'red', 'congruent': 0}]
    Routine trial
    Routine audioFeedback
  LoopTerminator trials
  Routine thanks
