PsychoPy2experiment version="2021.1.0.dev4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 720]
  expName = sliders2
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Routines
  Routine dynamic_stim
    GratingComponent testStim
      ori [set every frame] = ori.value
      pos [set every frame] = (pos.value, 0)
      sf = 8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 256
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    TextboxComponent oriLabel
      anchor = bottom-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.3, -0.5)
      startVal [time (s)] = 0.0
      text = Ori
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    SliderComponent ori
      color = LightGrey
      forceEndRoutine = False
      granularity = 0
      labels = (0, 180)
      pos = (-0.2, -0.05)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 45, 90, 135, 180)
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    TextboxComponent posLabel
      anchor = bottom-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.6, -0.5)
      startVal [time (s)] = 0.0
      text = xPos
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    SliderComponent pos
      color = LightGrey
      forceEndRoutine = False
      granularity = 0
      labels = 0.1, 0.5
      pos = (-0.5, -0.05)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = 0.1, 0.2, 0.3, 0.4, 0.5
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    TextboxComponent dynoInst
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
      text = Use the orientation and position sliders to move the stimulus. Press any key to move on.
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    KeyboardComponent dynoDone
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fruit_rating
    TextboxComponent fruitLabel
      bold = False
      editable = False
      letterHeight = 0.1
      pos = (0, 0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fruitName
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    SliderComponent sourness
      color = LightGrey
      forceEndRoutine = False
      granularity = 0.5
      labels = ('sour','','neutral','','sweet')
      pos = (0, 0.2)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent yumminess
      color = LightGrey
      forceEndRoutine = False
      granularity = 0.5
      labels = 'yucky','yummy'
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = triangleMarker
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent fruitInst
      anchor = bottom-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.48)
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
      text = Press any key to move on
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    KeyboardComponent fruitDone
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slider_styles
    VariableComponent colorNames
      startExpValue = ['red', 'orange', 'green', 'salmon']
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    KeyboardComponent stylesDone
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent stylesInst
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Click on some sliders to see their markers

        Press any key to end
    SliderComponent categ
      color = LightGrey
      forceEndRoutine = False
      granularity = 1
      labels = *colorNames
      pos = (0, -0.3)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = *list(range(len(colorNames)))
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    PolygonComponent categShape
      fillColor [set every frame] = $colorNames[int(categ.rating or 0)]
      lineColor = None
      pos = (0, -0.1)
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent leftLabels
      forceEndRoutine = False
      granularity = 0
      labels = 'left','hand','labels'
      pos = (-0.5, 0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = labels45
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent rightLabels
      color = white
      forceEndRoutine = False
      granularity = 0
      labels = ('flip', 'for', 'right-hand')
      pos = (0.5, 0)
      size = (0.05, 0.6)
      startVal [time (s)] = 0.0
      styles = triangleMarker
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine customMarker
    SliderComponent slider
      color = white
      forceEndRoutine = True
      granularity = 0
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styles = triangleMarker
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent finger
      bold = False
      editable = False
      font = Noto Sans JP
      letterHeight = 0.1
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = ☝
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    CodeComponent setMarker
      Code Type = Auto->JS
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      Begin Routine:
        # Set finger as the object to use as the slider's marker
        slider.marker = finger
    TextboxComponent info
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.5)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
      text = Did you know you can use any component with a draw() function as a custom marker for a Slider?
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Flow
  Routine slider_styles
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fruitConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'fruitName': 'apple'},
      {'fruitName': 'grapefruit'},
      {'fruitName': 'banana'},
      {'fruitName': 'satsuma'}]
    Routine fruit_rating
  LoopTerminator trials
  Routine dynamic_stim
  Routine customMarker
