PsychoPy2experiment version="2021.1.0.dev3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = progressBar
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Routines
  Routine trial
    VariableComponent progress
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 0
      startRoutineValue = progLoop.thisN/progLoop.nTotal # Trial number as percentage of total
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    PolygonComponent progBar
      fillColor = white
      pos [set every repeat] = (progress/2-0.4, -0.4)
      shape = rectangle
      size [set every repeat] = (progress, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent nextBtn
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent progLabel
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      text = Progress:
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    TextboxComponent instr
      bold = False
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = Press "space" to move on to the next trial
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Flow
  LoopInitiator progLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator progLoop
