PsychoPy2experiment version="1.71.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'ID01', 'session':'001'}
  Save excel file = True
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine A
    TextComponent msgA
      color [set every repeat] = $letterColor
      text = You chose A (the blue pill?)
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine B
    TextComponent msgB
      color [set every repeat] = $letterColor
      text = You chose B (the red pill?)
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you press 'a' you'll get 3 trials of Routine A

        If you press 'b' you'll get 3 trials of Routine B
    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = ['a', 'b']
      startVal [time (s)] = 0.0
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    CodeComponent chooseBranch
      End Routine:
        if resp.keys=='a':
            nRepsA=1
            nRepsB=0
        else:
            nRepsA=0
            nRepsB=1
Flow
  Routine instr
  LoopInitiator repsA loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsA
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    conditions:
      [{u'letterColor': u'red'},
      {u'letterColor': u'green'},
      {u'letterColor': u'blue'}]
    Routine A
  LoopTerminator repsA
  LoopInitiator repsB loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = nRepsB
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    conditions:
      [{u'letterColor': u'red'},
      {u'letterColor': u'green'},
      {u'letterColor': u'blue'}]
    Routine B
  LoopTerminator repsB
