PsychoPy2experiment version="1.50.04"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'ori':10}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent gabor
      colour = [1, 1, 1]
      ori = expInfo['ori']
      mask = gauss
      times = [0.5,3]
      phase [set every frame] = trialClock.getTime()*2
      colourSpace = rgb
      units = pix
      sf = 0.1
      image = sin
      size = [128,128]
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    KeyboardComponent resp
      forceEndTrial = True
      times = [0.5,5.0]
      allowedKeys = ["left","right"]
      storeResponseTime = False
      correctIf = resp.keys==str(thisTrial.corrAns)
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  Routine instr
    TextComponent instructions
      colour = [1, 1, 1]
      times = [0, 10000]
      letterHeight = 0.1
      colourSpace = rgb
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      text:
        "Press left or right cursor to end trial.

        Any key to start"
    KeyboardComponent ready
      forceEndTrial = True
      times = [0, 10000]
      storeResponseTime = False
      correctIf = resp.keys==str(thisTrial.corrAns)
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Flow
  Routine instr
  Routine trial
