PsychoPy2experiment version="1.90.2"
Settings
  expName = NoiseExample
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [800, 600]
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    NoiseStimComponent BinaryNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = pix
      pos = (-246, 246)
      size = (256, 256)
      noiseImage = None
      mask = raisedCos
      sf = 1/256
      texture resolution = 512
      interpolate = nearest
      noiseType = Binary
      noiseElementSize = 2
      noiseBaseSf = 8.0
      noiseBW = 1
      noiseBWO = 1
      noiseFractalPower = 0.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
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    NoiseStimComponent GaborNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (7, 7)
      size = (7, 7)
      ori = 45
      noiseImage = None
      mask = raisedCos
      sf = 1/7
      texture resolution = 512
      noiseType = Gabor
      noiseElementSize = 0.0625
      noiseBaseSf = 4.0
      noiseBW = 1
      noiseBWO = 30
      noiseFractalPower = 0.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
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    NoiseStimComponent PinkNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (-7, -7)
      size = (7, 7)
      noiseImage = None
      mask = raisedCos
      sf = 1/7
      texture resolution = 512
      noiseType = Filtered
      noiseElementSize = 0.0625
      noiseBaseSf = 8.0
      noiseBW = 1
      noiseBWO = 1
      noiseFractalPower = -1
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
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    NoiseStimComponent FilteredNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (7, -7)
      size = (7, 7)
      noiseImage = None
      mask = raisedCos
      sf = 1/7
      texture resolution = 512
      noiseType = Filtered
      noiseElementSize = 0.0625
      noiseBaseSf = 8.0
      noiseBW = 1
      noiseBWO = 1
      noiseFractalPower = 0.0
      noiseFilterOrder = 2.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
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    NoiseStimComponent ImageNoise
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      size = (7, 7)
      noiseImage = face.jpg
      mask = raisedCos
      sf = 1/7
      texture resolution = 256
      noiseType = Image
      noiseElementSize = 0.0625
      noiseBaseSf = 8.0
      noiseBW = 1
      noiseBWO = 1
      noiseFractalPower = 0.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFilterLower = 1.0
      noiseClip = 3.0
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
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    TextComponent BinaryText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (-7, 3)
      text = Binary noise
      letterHeight = 1
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    TextComponent FilteredText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (7, -3)
      text = Filtered noise
      letterHeight = 1
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    TextComponent PinkText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (-7, -3)
      text = Pink noise
      letterHeight = 1
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    TextComponent GaborText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (7, 3)
      text = Gabor noise
      letterHeight = 1
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    TextComponent ImageText
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      pos = (0, 6)
      letterHeight = 1
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      text:
        Noise
        spectrum
        from an
        image
    StaticComponent ISI
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 0.25
  Routine Intro
    TextComponent Intro_text
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      units = deg
      text = This demo shows examples of 5 different types of visual noise. New random samples are chosen after each repeat.
      letterHeight = 1
      wrapWidth = 10
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    nReps = 5
    loopType = random
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    Routine trial
  LoopTerminator trials
