PsychoPy2experiment version="1.50.04"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'ori':10}
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PatchComponent gabor
      colour [set every repeat] = thisTrial
      ori = expInfo['ori']
      mask = gauss
      sf = 0.1
      duration = 0.5
      phase [set every frame] = trialClock.getTime()*2
      startTime = 0.5
      colourSpace = rgb
      units = pix
      image = sin
      size = [128,128]
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = 'up'
      storeResponseTime = False
      startTime = 0.5
      allowedKeys = ["up","down"]
      duration = 2.0
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    PatchComponent fixation
      colour = [1, 1, 1]
      mask = none
      sf = 1
      duration = 1.0
      startTime = 0.0
      colourSpace = rgb
      units = pix
      image = none
      size = [3, 3]
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  Routine instr
    TextComponent instructions
      colour = [1, 1, 1]
      letterHeight = 0.1
      startTime = 0
      colourSpace = rgb
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      text:
        "This exp measures your detection threshold using a staircase proceedure.

        Press 'up' if you see the stimulus, 'down' if you didn't.

        Any key to start"
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      storeResponseTime = False
      startTime = 0
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Flow
  Routine instr
  LoopInitiator trials loopType="StairHandler"
    min value = 0
    N reversals = 0
    loopType = staircase
    nReps = 30
    start value = 0.5
    N up = 1
    max value = 1
    N down = 3
    step type = log
    step sizes = [0.8,0.8,0.4,0.4,0.2]
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    Routine trial
  LoopTerminator trials
