PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  expName = ratingsNew
  Screen = 1
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Routines
  Routine rate_a_fruit
    TextComponent fruit
      text [set every repeat] = $fruitName
      pos = (0, 0.5)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SliderComponent sourness
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      size = (1.0, 0.1)
      style = rating
      ticks = (1, 2, 3, 4, 5)
      forceEndRoutine = False
      units = norm
      granularity = 0.5
      labels = ('sour','','neutral','','sweet')
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    SliderComponent yumminess
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      size = (1.0, 0.1)
      style = rating
      ticks = (1, 2, 3, 4, 5)
      forceEndRoutine = False
      units = norm
      granularity = 0.5
      labels = 'yucky','yummy'
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    TextComponent intruct1
      text = Press a key to confirm and move on
      pos = (0, -0.9)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent fruitDone
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dynamicStim
    SliderComponent ori
      pos = (-0.7, 0)
      startVal [time (s)] = 0.0
      size = (0.1, 1.0)
      style = slider
      ticks = (0, 45, 90, 135, 180)
      forceEndRoutine = False
      granularity = 0
      labels = 0, 180
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    TextComponent oriLabel
      text = Ori
      pos = (-0.7, -0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SliderComponent pos
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      size = (0.1, 1.0)
      style = slider
      ticks = 0.1, 0.2, 0.3, 0.4, 0.5
      forceEndRoutine = True
      granularity = 0
      labels = 0.1, 0.5
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    TextComponent xPosLabel
      text = xPos
      pos = (-0.3, -0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent dynamicDone
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent checkSliderVals
      Begin Routine:
        # setting marker pos is not the same as rating
        # marker pos gets updated during a drag whereas
        # rating is only updated on a mouse button release

        pos.markerPos = 0
        ori.markerPos = 0
    GratingComponent testStim
      tex = sin
      mask = circle
      pos [set every frame] = (pos.markerPos, 0)
      units = height
      texture resolution = 256
      ori [set every frame] = ori.markerPos
      startVal [time (s)] = 0.0
      sf = 8
      size = (0.5, 0.5)
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    TextComponent instruct2
      pos = (0, 0.8)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        slider markerPos can update other things.

        Press a key to move on
  Routine sliderStyles
    KeyboardComponent endStyles
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruct3
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Click on some sldiers to see their markers

        Press any key to finalise ratings
    SliderComponent categScale
      pos = (0.5, -0.7)
      startVal [time (s)] = 0.0
      size = (0.8, 0.05)
      style = rating
      forceEndRoutine = True
      granularity = 1
      labels = 'red', 'orange', 'green', 'salmon'
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    PolygonComponent categFeedback
      pos = (0.5, -0.5)
      shape = triangle
      startVal [time (s)] = 0.0
      size = (0.3, 0.3)
      fillColor [set every frame] = $categScale.getRating()
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    SliderComponent leftLabels
      pos = (-0.7, -0.0)
      startVal [time (s)] = 0.0
      size = (0.05, 0.6)
      style = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
      forceEndRoutine = True
      granularity = 0
      labels = ('left','hand','labels')
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      customize:
        # you can use multiple styles here (override settings above)
        leftLabels.style = ['labels45','whiteOnBlack']
    SliderComponent rightLabels
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      size = (0.05, 0.6)
      style = labels45
      ticks = (1, 2, 3, 4, 5, 6, 7)
      forceEndRoutine = True
      granularity = 0
      labels = ('flip', 'for', 'right-hand')
      flip = True
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      customize:
        # you can use multiple styles here (override settings above)
        rightLabels.style = ['labels45','triangleMarker']
    CodeComponent oneClickCheck
      Each Frame:
        if oneClickOnly.getRating() is not None:
            oneClickOnly.readOnly = True
    SliderComponent oneClickOnly
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      size = (1.0, 0.1)
      style = whiteOnBlack
      ticks = 0, 1
      forceEndRoutine = True
      granularity = 0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fruitConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'fruitName', u'apple')]),
      OrderedDict([(u'fruitName', u'grapefruit')]),
      OrderedDict([(u'fruitName', u'banana')]),
      OrderedDict([(u'fruitName', u'satsuma')])]
    Routine rate_a_fruit
  LoopTerminator trials
  Routine dynamicStim
  Routine sliderStyles
