PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant':'', 'session':'02'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  color = $[0, 0, 0]
  expName = sternberg
  logging level = warning
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $numberSet
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    TextComponent presentTarget
      letterHeight = 0.1
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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  Routine practInstruct
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a sequence of between 1 and 6 randomly ordered numbers.

        Following a short delay you will then be presented with a single number and you will have to decide whether this new number was a member of the sequence.

        Respond with the keys;
         - LEFT CURSOR if the number was NOT in the sequence
         - RIGHT CURSOR if the number WAS in the sequence

        There will be a number of practice trials in which you will be given feedback.  Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine mainInstruct
    TextComponent instr2
      color = $[1, 1, 1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember:
         - LEFT CURSOR for NOT in the sequence
         - RIGHT CURSOR for IN the sequence
        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Thanks for taking part!
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Flow
  Routine practInstruct
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = pracTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'numberSet': 6, u'target': 6, u'corrAns': 9, u'posInSet': 1, u'setSize': 1, u'present': u'y'},
      {u'numberSet': 5, u'target': 3, u'corrAns': 1, u'posInSet': u'--', u'setSize': 1, u'present': u'n'},
      {u'numberSet': u'4 8', u'target': 4, u'corrAns': 9, u'posInSet': 1, u'setSize': 2, u'present': u'y'},
      {u'numberSet': u'2 1', u'target': 5, u'corrAns': 1, u'posInSet': u'--', u'setSize': 2, u'present': u'n'},
      {u'numberSet': u'2 9 4', u'target': 4, u'corrAns': 9, u'posInSet': 3, u'setSize': 3, u'present': u'y'},
      {u'numberSet': u'4 1 5', u'target': 2, u'corrAns': 1, u'posInSet': u'--', u'setSize': 3, u'present': u'n'},
      {u'numberSet': u'1 5 2 9', u'target': 5, u'corrAns': 9, u'posInSet': 2, u'setSize': 4, u'present': u'y'},
      {u'numberSet': u'3 1 9 4', u'target': 6, u'corrAns': 1, u'posInSet': u'--', u'setSize': 4, u'present': u'n'},
      {u'numberSet': u'1 7 9 8 5', u'target': 8, u'corrAns': 9, u'posInSet': 4, u'setSize': 5, u'present': u'y'},
      {u'numberSet': u'9 6 7 4 5', u'target': 3, u'corrAns': 1, u'posInSet': u'--', u'setSize': 5, u'present': u'n'},
      {u'numberSet': u'4 3 1 7 9 8', u'target': 4, u'corrAns': 9, u'posInSet': 1, u'setSize': 6, u'present': u'y'},
      {u'numberSet': u'5 7 8 4 1 2', u'target': 6, u'corrAns': 1, u'posInSet': u'--', u'setSize': 6, u'present': u'n'}]
    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine mainInstruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mainTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'numberSet': 5, u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'},
      {u'numberSet': 9, u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'},
      {u'numberSet': 1, u'target': 7, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 1, u'present': u'n'},
      {u'numberSet': 4, u'target': 4, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'},
      {u'numberSet': 7, u'target': 7, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'},
      {u'numberSet': 8, u'target': 8, u'corrAns': u'right', u'posInSet': 1, u'setSize': 1, u'present': u'y'},
      {u'numberSet': u'8 9', u'target': 5, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'},
      {u'numberSet': u'6 8', u'target': 9, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'},
      {u'numberSet': u'7 9', u'target': 1, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'},
      {u'numberSet': u'6 2', u'target': 6, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'},
      {u'numberSet': u'2 3', u'target': 2, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'},
      {u'numberSet': u'3 4', u'target': 3, u'corrAns': u'right', u'posInSet': 1, u'setSize': 2, u'present': u'y'},
      {u'numberSet': u'7 1', u'target': 8, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'},
      {u'numberSet': u'4 1', u'target': 6, u'corrAns': u'left', u'posInSet': u'--', u'setSize': 2, u'present': u'n'}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
    Routine trial
  LoopTerminator trials
