PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'session':'01'}
  JS libs = remote
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{u'text': u'red', u'congruent': 1, u'corrAns': 1, u'letterColor': u'red'},
      {u'text': u'red', u'congruent': 0, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 1, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 0, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 1, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 0, u'corrAns': 1, u'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
