PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      letterHeight = 0.2
      startTime = 0.5
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      startTime = 0.5
      allowedKeys = ["left","down","right"]
      storeResponseTime = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startTime = 0
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      text:
        OK. Ready for the real thing?

        Remember, don't worry about the letter colour, read the WORD. Press:
        Left for the WORD 'red'
        Down for the WORD 'green'
        Right for the WORD 'blue'

        Press any key to continue
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      startTime = 0
      storeResponseTime = False
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      duration = 2.0
      letterHeight = 0.2
      startTime = 0.0
      font = arial
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      text [set every repeat] = $msg
      duration = 1.0
      letterHeight = 0.1
      startTime = 0.0
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startTime = 0.0
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      text:
        Don't worry about the colour of the letters now. Please press:
        Left for the WORD 'red'
        Down for the WORD 'green'
        Right for the WORD 'blue'

        Let's start with a few practice trials

        Press any key to continue
    KeyboardComponent ready1
      forceEndTrial = True
      startTime = 0.0
      storeResponseTime = False
      store = nothing
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    loopType = random
    nReps = 1
    trialList = [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'green'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'blue'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'red'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'red'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'green'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    trialListFile = trialTypesReverse.xlsx
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [1, 2]
    loopType = random
    nReps = 5
    trialList = [{u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'cong', u'corrAns': u'left', u'letterColor': u'red'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'green'}, {u'text': u'red', u'congruent': u'incong', u'corrAns': u'left', u'letterColor': u'blue'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'red'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'cong', u'corrAns': u'down', u'letterColor': u'green'}, {u'text': u'green', u'congruent': u'incong', u'corrAns': u'down', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'red'}, {u'text': u'blue', u'congruent': u'incong', u'corrAns': u'right', u'letterColor': u'green'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': u'cong', u'corrAns': u'right', u'letterColor': u'blue'}]
    trialListFile = trialTypesReverse.xlsx
    Routine trial
  LoopTerminator trials
  Routine thanks
