PsychoPy2experiment version="1.73.05"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {'participant':'demo', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent say_something
      text = say something
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MicrophoneComponent mic
      stopVal [duration (s)] = 2.5
      rate = 22050
      startVal [time (s)] = .1
    TextComponent show_loudness
      text [set every frame] = $"loudness = %.1f\nsaved file = %s\nhit any key to playback, then continue" % (mic.rms, mic.saved)
      startVal [time (s)] = 03.
      letterHeight = 0.07
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 4
      store = nothing
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  Routine playback
    CodeComponent code
      Begin Routine:
        mic.playback()
  Routine instr
    TextComponent instructions
      text = $"this is a loudness detector. ready?\n(please turn on your microphone)\npress any key to start"
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
    Routine playback
  LoopTerminator trials
