PsychoPy2experiment version="3.0.1"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [800, 600]
  expName = vvk
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Routines
  Routine show_playback_time
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        $"""vocal RT at %.3f while recording\nvocal RT at %.3f during play-back\n\nany key to continue"""
          % (vpvk.event_onset, vpvk2.event_onset)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine playback_speech
    CodeComponent playback
      Code Type = Py
      Begin Routine:
        # Create another instance to use for play-back:
        vpvk2 = vk.OnsetVoiceKey(
            file_in=vpvk.filename)  # the input file; here is output of the prior trial

        vpvk2.start()  # non-blocking
      Each Frame:
        # nothing needed here
      End Routine:
        thisExp.addData('vocal_RT', round(vpvk2.event_onset, 3))
        thisExp.addData('filename', vpvk.filename)

        # only needed if no other event will make this happen:
        thisExp.nextEntry()  # otherwise data is not saved
    TextComponent play_message
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $"playing {0}".format(vpvk.filename)
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  Routine get_speech
    TextComponent say_something
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
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    CodeComponent record
      Code Type = Py
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2,
            file_out='data/trial_'+str(trials.thisN).zfill(3)+'_'+word+'.wav')

        # Start it recording (and detecting):
        vpvk.start()  # non-blocking; don't block when using Builder
      Each Frame:
        # Nothing needed every frame for this demo
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
  Routine the_end
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The end.

        Data + recordings are in folder data/
  Routine instructions
    CodeComponent init_pyo
      Code Type = Py
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=32)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Task: Read each word out loud within
        2 seconds. There will be 3 trials.

        Press any key to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'vowel_plosive': 'ah pa'},
      {'vowel_plosive': 'ee ka'},
      {'vowel_plosive': 'oo ta'}]
    Routine get_speech
    Routine playback_speech
    Routine show_playback_time
  LoopTerminator trials
  Routine the_end
